<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.Bpod;assembly=Bonsai.Bpod"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:gli="clr-namespace:Bonsai.Shaders.Input;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="NestedWorkflow">
        <Name>Stim</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="REPortName" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>RotaryEncoder</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="PortName" DisplayName="REPortName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Encoder">
                      <p1:PortName>COM3</p1:PortName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:EncoderEvent" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp,Data</Selector>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>RawEncoderEvents</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>single(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:SampleOnRenderFrame" />
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>BpodEvent</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:EncoderPosition" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp,Position</Selector>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>RawEncoderPositions</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Rescale">
                      <dsp:Min>-512</dsp:Min>
                      <dsp:Max>512</dsp:Max>
                      <dsp:RangeMin>-180</dsp:RangeMin>
                      <dsp:RangeMax>180</dsp:RangeMax>
                      <dsp:RescaleType>Linear</dsp:RescaleType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:SampleOnRenderFrame" />
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>Encoder</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="9" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="3" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="10" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>InitPosition</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>BpodOverrides</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="FloatProperty">
                        <Value>7</Value>
                      </Combinator>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="dsp:Pow">
                        <dsp:Power>2</dsp:Power>
                      </Combinator>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MulticastSubject">
                      <Name>StimSize</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="FloatProperty">
                        <Value>0</Value>
                      </Combinator>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MulticastSubject">
                      <Name>StimPhase</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="FloatProperty">
                        <Value>4</Value>
                      </Combinator>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MulticastSubject">
                      <Name>Gain</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="IntProperty">
                        <Value>-35</Value>
                      </Combinator>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MulticastSubject">
                      <Name>InitPosition</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="FloatProperty">
                        <Value>1</Value>
                      </Combinator>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MulticastSubject">
                      <Name>Contrast</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="IntProperty">
                        <Value>0</Value>
                      </Combinator>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MulticastSubject">
                      <Name>TrialNum</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="FloatProperty">
                        <Value>0.1</Value>
                      </Combinator>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MulticastSubject">
                      <Name>StimFreq</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="FloatProperty">
                        <Value>0</Value>
                      </Combinator>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MulticastSubject">
                      <Name>StimAngle</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="IntProperty">
                        <Value>0</Value>
                      </Combinator>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MulticastSubject">
                      <Name>StimLocationX</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="wie:KeyDown">
                      <wie:Filter>D1</wie:Filter>
                      <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>BpodEvent</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="wie:KeyDown">
                      <wie:Filter>D2</wie:Filter>
                      <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>2</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>BpodEvent</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="wie:KeyDown">
                      <wie:Filter>D3</wie:Filter>
                      <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>3</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>BpodEvent</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="wie:KeyDown">
                      <wie:Filter>D4</wie:Filter>
                      <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>4</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>BpodEvent</Name>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="gli:MouseMove" />
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
                      <Selector>EventArgs.X</Selector>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="dsp:Rescale">
                        <dsp:Min>0</dsp:Min>
                        <dsp:Max>1024</dsp:Max>
                        <dsp:RangeMin>-20</dsp:RangeMin>
                        <dsp:RangeMax>3333331</dsp:RangeMax>
                        <dsp:RescaleType>Linear</dsp:RescaleType>
                      </Combinator>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="gl:SampleOnRenderFrame" />
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MulticastSubject">
                      <Name>Encoder</Name>
                    </Builder>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="32" To="33" Label="Source1" />
                  <Edge From="33" To="34" Label="Source1" />
                  <Edge From="34" To="35" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>EnvironmentDefinition</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:CreateWindow">
                      <gl:Width>640</gl:Width>
                      <gl:Height>480</gl:Height>
                      <gl:VSync>On</gl:VSync>
                      <gl:SwapSync>false</gl:SwapSync>
                      <gl:ClearColor>Gray</gl:ClearColor>
                      <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                      <gl:CursorVisible>true</gl:CursorVisible>
                      <gl:Location xsi:nil="true" />
                      <gl:WindowBorder>Resizable</gl:WindowBorder>
                      <gl:WindowState>Fullscreen</gl:WindowState>
                      <gl:DisplayDevice>First</gl:DisplayDevice>
                      <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                      <gl:TargetUpdateFrequency xsi:nil="true" />
                      <gl:RenderState />
                      <gl:GraphicsMode>
                        <gl:ColorFormat>
                          <gl:Red>8</gl:Red>
                          <gl:Green>8</gl:Green>
                          <gl:Blue>8</gl:Blue>
                          <gl:Alpha>8</gl:Alpha>
                        </gl:ColorFormat>
                        <gl:Depth>16</gl:Depth>
                        <gl:Stencil>0</gl:Stencil>
                        <gl:Samples>0</gl:Samples>
                        <gl:AccumulatorFormat>
                          <gl:Red>0</gl:Red>
                          <gl:Green>0</gl:Green>
                          <gl:Blue>0</gl:Blue>
                          <gl:Alpha>0</gl:Alpha>
                        </gl:AccumulatorFormat>
                        <gl:Buffers>4</gl:Buffers>
                        <gl:Stereo>true</gl:Stereo>
                      </gl:GraphicsMode>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="res:LoadResources" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:RenderFrame" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
                  <Expression xsi:type="PublishSubject">
                    <Name>DrawSyncSqare</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Encoder</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Rescale">
                      <dsp:Min>-180</dsp:Min>
                      <dsp:Max>180</dsp:Max>
                      <dsp:RangeMin>-2</dsp:RangeMin>
                      <dsp:RangeMax>2</dsp:RangeMax>
                      <dsp:RescaleType>Linear</dsp:RescaleType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PublishSubject">
                    <Name>StimLocationX</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="LocationX" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="PublishSubject">
                    <Name>UpdateSyncSquare</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimContrast</Name>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>UpdateSyncSquare</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Contrast" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
                    <LocationX>-0.20703125</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Angle>-3182.60156</Angle>
                    <SpatialFrequency>10</SpatialFrequency>
                    <TemporalFrequency>0</TemporalFrequency>
                    <Phase>0</Phase>
                    <SquareWave>false</SquareWave>
                    <Contrast>1</Contrast>
                    <DutyCycle xsi:nil="true" />
                    <Radius>1</Radius>
                    <Aperture>0</Aperture>
                    <Opacity>1</Opacity>
                    <ExtentX>1</ExtentX>
                    <ExtentY>1</ExtentY>
                  </Expression>
                  <Expression xsi:type="PublishSubject">
                    <Name>DrawStim</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DrawSyncSqare</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>UpdateSyncSquare</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Sample" />
                  </Expression>
                  <Expression xsi:type="rx:Accumulate" />
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it % 2</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ColorR" />
                      <Property Name="ColorG" />
                      <Property Name="ColorB" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>0.2</ExtentX>
                    <ExtentY>0.2</ExtentY>
                    <LocationX>1.23333335</LocationX>
                    <LocationY>-1</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <ColorR>1</ColorR>
                    <ColorG>1</ColorG>
                    <ColorB>1</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:WindowClosed" />
                  </Expression>
                  <Expression xsi:type="osc:ReceiveMessage">
                    <osc:Address>/x</osc:Address>
                    <osc:TypeTag>i</osc:TypeTag>
                    <osc:Connection>bpod</osc:Connection>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:SampleOnUpdateFrame" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="3" To="6" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="15" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="9" To="11" Label="Source1" />
                  <Edge From="10" To="15" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source3" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="17" To="24" Label="Source2" />
                  <Edge From="18" To="20" Label="Source1" />
                  <Edge From="19" To="20" Label="Source2" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="25" To="28" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source2" />
                  <Edge From="28" To="29" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Bpod Events Process</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BpodEvent</Name>
                  </Expression>
                  <Expression xsi:type="Condition">
                    <Name>STOP</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="FloatProperty">
                            <Value>1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SelectMany">
                    <Name>HideStimulus</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="FloatProperty">
                            <Value>0</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Condition">
                    <Name>SHOW STIM</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="FloatProperty">
                            <Value>2</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SelectMany">
                    <Name>UpdateContrast</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="FloatProperty">
                            <Value>1</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>StimContrast</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileNameEvents" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileNamePositions" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileNameStimPositionScreen" />
            </Expression>
            <Expression xsi:type="NestedWorkflow">
              <Name>SaveData</Name>
              <Description>Needs a Published Subject with the RE data stream
Saves Rotary Encoder events, positions and trial info from pybpod
Optionally saves ultrasonic microphone data.

3/4 different files, as per ALF specification:
_iblrig_encoderEvents.raw.ssv
_iblrig_encoderPositions.raw.ssv
_iblrig_encoderTrialInfo.raw.ssv
Optional:
_iblrig_micData.raw.wav
</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RawEncoderEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="FileName" DisplayName="FileNameEvents" />
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>C:\iblrig_data\_iblrig_encoderEvents.raw.ssv</io:FileName>
                    <io:Append>false</io:Append>
                    <io:Overwrite>true</io:Overwrite>
                    <io:Suffix>None</io:Suffix>
                    <io:IncludeHeader>false</io:IncludeHeader>
                    <io:CompatibilityMode>true</io:CompatibilityMode>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RawEncoderPositions</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="FileName" DisplayName="FileNamePositions" />
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>C:\iblrig_data\_iblrig_encoderPositions.raw.ssv</io:FileName>
                    <io:Append>false</io:Append>
                    <io:Overwrite>true</io:Overwrite>
                    <io:Suffix>None</io:Suffix>
                    <io:IncludeHeader>false</io:IncludeHeader>
                    <io:CompatibilityMode>true</io:CompatibilityMode>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimLocationX</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="FileName" DisplayName="FileNameStimPositionScreen" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimContrast</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>C:\iblrig_data\_iblrig_stimPositionScreen.raw.csv</io:FileName>
                    <io:Append>false</io:Append>
                    <io:Overwrite>true</io:Overwrite>
                    <io:Suffix>None</io:Suffix>
                    <io:IncludeHeader>false</io:IncludeHeader>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="FileName" DisplayName="FileNameSyncSquareUpdate" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>UpdateSyncSquare</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>C:\iblrig_data\_iblrig_stimSquareUpdate.csv</io:FileName>
                    <io:Append>false</io:Append>
                    <io:Overwrite>true</io:Overwrite>
                    <io:Suffix>None</io:Suffix>
                    <io:IncludeHeader>false</io:IncludeHeader>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="4" To="6" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="7" To="10" Label="Source2" />
                  <Edge From="8" To="12" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="13" To="16" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="7" To="10" Label="Source1" />
            <Edge From="8" To="10" Label="Source2" />
            <Edge From="9" To="10" Label="Source3" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Last" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>